// makes a gap junction between 2 soma compartments
// $o1 - cell[1],
// $o2 - cell[2],
// $3, $4 - position within section1, section2
// $5 - gj conductance
// $6 - gj time constant
begintemplate gapjunction
      public g
	  public setg, setcells, cell1, cell2
      objref con1, con2
      proc init() {
        objref con1, con2
        $o1.soma con1 = new Gap($3)
        $o2.soma con2 = new Gap($4)
        setpointer con1.vgap, $o2.soma.v($4)
        setpointer con2.vgap, $o1.soma.v($3)
	setpointer con1.naj, $o2.soma.nai($4)
        setpointer con2.naj, $o1.soma.nai($3)
	setpointer con1.kj, $o2.soma.ki($4)
        setpointer con2.kj, $o1.soma.ki($3)
	setpointer con1.caj, $o2.soma.cai($4)
        setpointer con2.caj, $o1.soma.cai($3)
		con1.g = $5
		con2.g = $5
		con1.tau = $6
		con2.tau = $6
      }
	 proc setg() { // change the gj conductance externally
        con1.g = $1
        con2.g = $1
	con1.tau = $2
	con2.tau = $2
      }
endtemplate gapjunction
